PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = psychopy
  keyboardBackend = ioHub
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Routines
  Routine Consent
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ConsentText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your participation in this study is completely voluntary. Your responses will be kept anonymous and confidential. Additionally, any personal information you submit will be kept private as well. In this particular experiment, you will be asked to determine whether a presented image represents an animate or inanimate entity. This research involves no more risk than encountered in everyday life. There is also no direct benefit for you to participate in this study, beyond the compensation agreed upon with the lab. Please note whether you consent to participate in this survey down below.

        Press space bar to continue.
  Routine Welcome
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This particular experiment aims to measure each participant’s level of prosociality. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Press space bar to continue.
    VariableComponent fontsize
      startExpValue = 0.05
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  Routine StudyTrial
    TextComponent text
      color [set every repeat] = $WordColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $WordItem
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  Routine Blank500
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ImageStudyTrial
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      timeRelativeTo = joystick onset
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  Routine GeneralInstructions
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment involves the use of image stimuli and a joystick. You will be presented with an image that will be either animate or inanimate, but not both. Please use your best judgment if this distinction seems unclear for any of the images. You will need to either push or pull the joystick, depending on whether the image is animate or inanimate.

        Press space bar to continue.
  Routine Rest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Rest period.

        Press space bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTests1
    ImageComponent image_2
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    JoyButtonsComponent button_resp
      allowedKeys = 0,1,2,3,4
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine PracticeInstructions1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. Please push the joystick if you believe the image to be animate, or pull the joystick if you believe the image to be inanimate.

        Press space bar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far, and note that there will be a slight break after every 20 images.

        Press space bar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GeneralInstructions2
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be instructed whether to push for animate or pull for animate (along with the instructions for inanimate images, which will be opposite that for animate images) before each phase of the experiment. There will be two phases of the experiment, with each phase containing a total of 90 images–10 of which will be practice images presented before the data collection begins. Please push or pull as quickly as possible, as your reaction time will be measured.

        Press space bar to continue.
  Routine ImageTest2
    KeyboardComponent key_resp_10
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_3
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest3
    KeyboardComponent key_resp_11
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_4
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest4
    KeyboardComponent key_resp_12
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_5
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine StudyTrial2
    KeyboardComponent key_resp_14
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine PracticeInstructions2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. Please push the joystick if you believe the image to be inanimate, or pull the joystick if you believe the image to be animate.

        Press space bar to continue.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions2
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far, and note that there will be a slight break after every 20 images.

        Press space bar to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTest5
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  Routine ImageTest6
    KeyboardComponent key_resp_17
      allowedKeys = '1', '2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_8
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest7
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  Routine ImageTest8
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  Routine End_Experiment
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment has now ended.

         As noted earlier, this particular experiment aims to measure each participant’s level of prosociality. That was done by measuring the reaction time difference between how long it takes for each participant to push for certain images and to pull for certain other images, as organized by animate/inanimate status and valence. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Thank you for being part of the experiment, and please feel free to contact the researcher if you have any further questions.
Flow
  Routine Welcome
  Routine Blank500
  Routine Consent
  Routine Blank500
  Routine GeneralInstructions
  Routine Blank500
  Routine GeneralInstructions2
  Routine Blank500
  LoopInitiator controlTaskOrder loopType="TrialHandler"
    conditionsFile = $'conditions'+expInfo['group']+'.xlsx'
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator part1 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask1
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      Routine PracticeInstructions1
      LoopInitiator trialsStudyImages loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Goat 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Happy face 2.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Lion 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Monkey 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Dog 12.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Gun 5.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Money 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Office supplies 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sidewalk 3.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Storage 1.jpg', 'AnimateInanimate': 2}]
        Routine ImageStudyTrial
        Routine Blank500
      LoopTerminator trialsStudyImages
      Routine TestInstructions1
      LoopInitiator trialsOriginal loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Fire 7.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.7007, 'Rand': 0.6719101083569338},
          {'ImageFile': 'Images/Birthday 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.5506, 'Rand': 0.46285993459803654},
          {'ImageFile': 'Images/Soldiers 7.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5465, 'Rand': 0.9977797084285572},
          {'ImageFile': 'Images/Police 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.4345, 'Rand': 0.07517344267112913},
          {'ImageFile': 'Images/Jail 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.9691, 'Rand': 0.03865937602444702},
          {'ImageFile': 'Images/Baby 6.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0604, 'Rand': 0.39030199076009964},
          {'ImageFile': 'Images/Neonazi 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.0577, 'Rand': 0.8848283844025013},
          {'ImageFile': 'Images/Toilet 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.4986, 'Rand': 0.898260773201397},
          {'ImageFile': 'Images/Yarn 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5645, 'Rand': 0.6029614127731355},
          {'ImageFile': 'Images/Bird 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0495, 'Rand': 0.1352931607121708},
          {'ImageFile': 'Images/Picnic 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0998, 'Rand': 0.10131694427212556},
          {'ImageFile': 'Images/Sad pose 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.8801, 'Rand': 0.568733967121452},
          {'ImageFile': 'Images/Massage 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.7288, 'Rand': 0.7429463957737557}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
        Routine ImageTests1
        Routine Blank500
      LoopTerminator trialsOriginal
    LoopTerminator part1
    LoopInitiator part2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask2
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      Routine PracticeInstructions2
      LoopInitiator trialsStudyImages2 loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices2_inherently_reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Surprise 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Tiger 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Shark 7.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sad face 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Pigeon 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Yarn 4.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Wedding 7.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Storage 3.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Socks 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Rocks 3.jpg', 'AnimateInanimate': 1}]
        Routine StudyTrial2
        Routine Blank500
      LoopTerminator trialsStudyImages2
      Routine TestInstructions2
      LoopInitiator trialsReversed loopType="TrialHandler"
        Selected rows = 0:80
        conditionsFile = ImageTests1_Reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Fire 7.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.7007, 'Rand': 0.2575505223871397},
          {'ImageFile': 'Images/Birthday 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.5506, 'Rand': 0.319524409358253},
          {'ImageFile': 'Images/Soldiers 7.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5465, 'Rand': 0.2696768289046516},
          {'ImageFile': 'Images/Police 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.4345, 'Rand': 0.6054784475062427},
          {'ImageFile': 'Images/Jail 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.9691, 'Rand': 0.8398600376243888},
          {'ImageFile': 'Images/Baby 6.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0604, 'Rand': 0.7516402056790349},
          {'ImageFile': 'Images/Neonazi 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.0577, 'Rand': 0.2661110498977508},
          {'ImageFile': 'Images/Toilet 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.4986, 'Rand': 0.24701919740172684},
          {'ImageFile': 'Images/Yarn 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5645, 'Rand': 0.9087927786187595},
          {'ImageFile': 'Images/Bird 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0495, 'Rand': 0.012961172525481013},
          {'ImageFile': 'Images/Picnic 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0998, 'Rand': 0.8333126648555074},
          {'ImageFile': 'Images/Sad pose 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.8801, 'Rand': 0.19381369440426544},
          {'ImageFile': 'Images/Massage 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.7288, 'Rand': 0.884560452207011}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
        Routine ImageTest5
        Routine Blank500
      LoopTerminator trialsReversed
    LoopTerminator part2
  LoopTerminator controlTaskOrder
  Routine End_Experiment
